# Instrument driver configuration file.

[General settings]
# The name is shown in all the configuration windows
name: heater_thermometrie_2021

# The version string should be updated whenever changes are made to this config file

# Modification of version 1.0 on 24.08.2016 by Marius Palm: Modifying the text displayed for "Reset instrument at startup"
# Version 2.0: Hardware fixes. 2019-04, Peter&Hans Märki
version: 1.9.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: heater_thermometrie_2021

interface: Other
use_32bit_mode: True

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: heater_thermometrie_2021

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
[Thermometrie]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: on
group: Thermometrie
section: Control

[Heating]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: manual
combo_def_3: controlled
group: Heating
section: Control

[power]
datatype: DOUBLE
unit: %
def_value: 50.0
low_lim: 0.0
high_lim: 100.0
state_quant: Heating
state_value_1: manual
group: Heating
section: Control

[temperature]
datatype: DOUBLE
unit: K
def_value: 50.0
state_quant: Heating
state_value_1: controlled
group: Heating
section: Control

[temperature tolerance band]
datatype: DOUBLE
unit: K
def_value: 0.5
state_quant: Heating
state_value_1: controlled
group: Heating
section: Control

[settle time]
datatype: DOUBLE
unit: s
def_value: 60.0
state_quant: Heating
state_value_1: controlled
group: Heating
section: Control

[timeout time]
datatype: DOUBLE
unit: s
def_value: 300.00
state_quant: Heating
state_value_1: controlled
group: Heating
section: Control

[Serial Number Heater]
datatype: STRING
def_value: ?
permission: READ
group: Heater
section: Status

[Defrost]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: on
permission: READ
group: Heater
section: Status

[Error counter]
datatype: DOUBLE
unit: 1
def_value: 0.0
permission: READ
group: Heater
section: Status

[Connected]
datatype: COMBO
def_value: connected
combo_def_1: disconnected
combo_def_2: connected
permission: READ
group: Insert
section: Status

[Serial Number]
datatype: STRING
def_value: ?
permission: READ
state_quant: Connected
state_value_1: connected
group: Insert
section: Status

[Carbon]
datatype: DOUBLE
unit: Ohm
def_value: 0.0
permission: READ
group: Resistance
section: Temperature Tail

[PT1000_K]
datatype: DOUBLE
unit: Ohm
def_value: 0.0
permission: READ
group: Resistance
section: Temperature Tail

[Carbon calibrated]
datatype: DOUBLE
unit: K
def_value: 0.0
permission: READ
group: Temperature
section: Temperature Tail

[PT1000_K calibrated]
datatype: DOUBLE
unit: K
def_value: 0.0
permission: READ
group: Temperature
section: Temperature Tail

[calibrated]
datatype: DOUBLE
unit: K
def_value: 0.0
permission: READ
group: Temperature
section: Temperature Tail

