# Instrument driver configuration file.

[General settings]
# The name is shown in all the configuration windows
name: compact_2012 Voltage Source

# The version string should be updated whenever changes are made to this config file

# Modification of version 1.0 on 24.08.2016 by Marius Palm: Modifying the text displayed for "Reset instrument at startup"
# Version 2.0: Hardware fixes. 2019-04, Peter&Hans Märki
version: 1.9.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: compact_2012

interface: Other
use_32bit_mode: True

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: compact_2012

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
[DA1-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 1

[DA1-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 1

[DA2-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 2

[DA2-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 2

[DA3-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 3

[DA3-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 3

[DA4-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 4

[DA4-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 4

[DA5-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 5

[DA5-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 5

[DA6-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 6

[DA6-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 6

[DA7-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 7

[DA7-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 7

[DA8-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 8

[DA8-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 8

[DA9-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 9

[DA9-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 9

[DA10-jumper setting]
datatype: COMBO
def_value:  +/- 10 V, change by hand
combo_def_1: +/- 10 V, change by hand 
combo_def_2: +/- 5 V, change by hand 
combo_def_3: +/- 2 V, change by hand 
combo_def_4: +/- 1 V, change by hand 
combo_def_5: +/- 0.5 V, change by hand 
combo_def_6: +/- 0.2 V, change by hand 
combo_def_7: +/- 0.1 V, change by hand
group: Voltage 10

[DA10-voltage]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: <ok>
sweep_cmd: <ok>
show_in_measurement_dlg: True
group: Voltage 10


[Green LED]
datatype: BOOLEAN
def_value: False
group: LED
section: Geophone
 
[particle velocity]
datatype: DOUBLE
unit: m/s
def_value: 0.0
permission: READ
show_in_measurement_dlg: True
group: Geophone
section: Geophone

[percent FS]
datatype: DOUBLE
label: 0-100%
unit: %
def_value: 0.0
permission: READ
show_in_measurement_dlg: True
group: Geophone
section: Geophone

[red LED threshold percent FS]
datatype: DOUBLE
unit: 0-100%
def_value: 10.0
group: Geophone
section: Geophone
